open("/Users/juliasanabriafranquesa/Desktop/UOC/Q4/Q4TFM/ImatgesOriginals_Proves/A (1).tif");
run("RGB to Luminance");
run("Subtract Background...", "rolling=30 light");
run("Median...", "radius=3");
run("8-bit");
setAutoThreshold("Default dark");
//run("Threshold...");
setAutoThreshold("Otsu");
run("Threshold...");
run("Analyze Particles...", "size=150-Infinity pixel circularity=0.25-1.00 show=Overlay display include summarize in_situ");
run("To ROI Manager");
selectWindow("A (1).tif");
run("From ROI Manager");
roiManager("Show All without labels");
roiManager("Set Color", "red");
roiManager("Set Line Width", 3);
run("Flatten");
saveAs("Tiff", "/Users/juliasanabriafranquesa/Desktop/UOC/Q4/Q4TFM/ImatgesOriginals_Proves/A (1).tif");
close();
close();
selectWindow("luminance of A (1).tif");
close();
open("/Users/juliasanabriafranquesa/Desktop/UOC/Q4/Q4TFM/ImatgesOriginals_Proves/A (1).tif");
run("Split Channels");
selectWindow("A (1).tif (blue)");
run("Calculator Plus", "i1=[A (1).tif (red)] i2=[A (1).tif (green)] operation=[Add: i2 = (i1+i2) x k1 + k2] k1=0.3 k2=0 create");
imageCalculator("Subtract create", "A (1).tif (blue)","Result");
selectWindow("Result of A (1).tif (blue)");
setAutoThreshold("Default dark");
//run("Threshold...");
setThreshold(0, 50);
run("Analyze Particles...", "size=70-Infinity show=Overlay display exclude summarize in_situ");

run("To ROI Manager");
open("/Users/juliasanabriafranquesa/Desktop/UOC/Q4/Q4TFM/ImatgesOriginals_Proves/A (1).tif");
run("From ROI Manager");
roiManager("Show All without labels");
roiManager("Set Color", "red");
roiManager("Set Line Width", 3);
run("Flatten");
saveAs("Tiff", "/Users/juliasanabriafranquesa/Desktop/UOC/Q4/Q4TFM/Resultats Julia/P3GPT4/A (1)-1.tif");
selectWindow("A (1).tif");
close();
selectWindow("Result of A (1).tif (blue)");
close();
selectWindow("Result");
close();
selectWindow("A (1).tif (blue)");
close();
selectWindow("A (1).tif (green)");
close();
selectWindow("A (1).tif (red)");
close();
selectWindow("A (1)-1.tif");
close();